---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "PyGaze eye-tracking template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Vladimir\\YandexDisk\\work\\Joe\\round 3"
set disable_garbage_collection yes
set description "A template for eye-tracking experiments"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background "#8a8a8a"

define sketchpad Experiment_start
	set duration keypress
	set description "training start"
	draw textline center=1 color=white font_bold=no font_family=sans_serif font_italic=no font_size=34 html=yes show_if=always text="Теперь начнется эксперимент <br />Пожалуйста будьте внимательны" x=0 y=0 z_index=0

define notepad about_this_template
	__note__
	Hi,
	This template already contains the basic structure needed for a typical
	eye-tracking experiment, consisting of a practice phase, followed by an
	experimental phase.
	For more information, please refer to the website:
	<http://www.cogsci.nl/opensesame>
	Have fun with OpenSesame!
	--
	Sebastiaan
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 6
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 circle up
	setcycle 0 d far
	setcycle 0 order seq
	setcycle 0 sound right_square
	setcycle 1 circle down
	setcycle 1 d far
	setcycle 1 order seq
	setcycle 1 sound left_square
	setcycle 2 circle up
	setcycle 2 d far
	setcycle 2 order par
	setcycle 2 sound right_square
	setcycle 3 circle down
	setcycle 3 d far
	setcycle 3 order seq
	setcycle 3 sound left_circle
	setcycle 4 circle up
	setcycle 4 d far
	setcycle 4 order par
	setcycle 4 sound left_circle
	setcycle 5 circle down
	setcycle 5 d far
	setcycle 5 order par
	setcycle 5 sound left_circle
	run trial_sequence

define loop block_loop_exp
	set source table
	set skip 0
	set repeat 8
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 circle up
	setcycle 0 order seq
	setcycle 0 sound right_square
	setcycle 1 circle down
	setcycle 1 order seq
	setcycle 1 sound right_square
	setcycle 2 circle up
	setcycle 2 order par
	setcycle 2 sound right_square
	setcycle 3 circle down
	setcycle 3 order par
	setcycle 3 sound right_square
	setcycle 4 circle up
	setcycle 4 order seq
	setcycle 4 sound left_square
	setcycle 5 circle down
	setcycle 5 order seq
	setcycle 5 sound left_square
	setcycle 6 circle up
	setcycle 6 order par
	setcycle 6 sound left_square
	setcycle 7 circle down
	setcycle 7 order par
	setcycle 7 sound left_square
	setcycle 8 circle up
	setcycle 8 order seq
	setcycle 8 sound right_circle
	setcycle 9 circle down
	setcycle 9 order seq
	setcycle 9 sound right_circle
	setcycle 10 circle up
	setcycle 10 order par
	setcycle 10 sound right_circle
	setcycle 11 circle down
	setcycle 11 order par
	setcycle 11 sound right_circle
	setcycle 12 circle up
	setcycle 12 order seq
	setcycle 12 sound left_circle
	setcycle 13 circle down
	setcycle 13 order seq
	setcycle 13 sound left_circle
	setcycle 14 circle up
	setcycle 14 order par
	setcycle 14 sound left_circle
	setcycle 15 circle down
	setcycle 15 order par
	setcycle 15 sound left_circle
	run trial_sequence_1

define loop block_loop_exp_1
	set source_file ""
	set source table
	set skip 0
	set repeat 8
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 circle up
	setcycle 0 order seq
	setcycle 0 sound right_square
	setcycle 1 circle down
	setcycle 1 order seq
	setcycle 1 sound right_square
	setcycle 2 circle up
	setcycle 2 order par
	setcycle 2 sound right_square
	setcycle 3 circle down
	setcycle 3 order par
	setcycle 3 sound right_square
	setcycle 4 circle up
	setcycle 4 order seq
	setcycle 4 sound left_square
	setcycle 5 circle down
	setcycle 5 order seq
	setcycle 5 sound left_square
	setcycle 6 circle up
	setcycle 6 order par
	setcycle 6 sound left_square
	setcycle 7 circle down
	setcycle 7 order par
	setcycle 7 sound left_square
	setcycle 8 circle up
	setcycle 8 order seq
	setcycle 8 sound right_circle
	setcycle 9 circle down
	setcycle 9 order seq
	setcycle 9 sound right_circle
	setcycle 10 circle up
	setcycle 10 order par
	setcycle 10 sound right_circle
	setcycle 11 circle down
	setcycle 11 order par
	setcycle 11 sound right_circle
	setcycle 12 circle up
	setcycle 12 order seq
	setcycle 12 sound left_circle
	setcycle 13 circle down
	setcycle 13 order seq
	setcycle 13 sound left_circle
	setcycle 14 circle up
	setcycle 14 order par
	setcycle 14 sound left_circle
	setcycle 15 circle down
	setcycle 15 order par
	setcycle 15 sound left_circle
	run trial_sequence_1_1

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run pilot_trial always
	run block_loop always

define sequence block_sequence_exp
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run Experiment_start always
	run block_loop_exp always
	run rest_1 always
	run block_loop_exp_1 always

define inline_script center_inline_script
	set description "Executes Python code"
	___run__
	# Loop ...
	while True:
		# ... until space is pressed
		x, y = eyetracker.sample()
		if x < 810 or x >1110:
				break
	__end__
	set _prepare ""

define inline_script center_inline_script_1
	set description "Executes Python code"
	___run__
	# Loop ...
	while True:
		# ... until space is pressed
		x, y = eyetracker.sample()
		if x < 810 or x >1110:
				break
	__end__
	set _prepare ""

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=sans_serif font_italic=no font_size=34 html=yes show_if=always text="Эксперимент закончился - нажмите любую кнопку <br/> Ваш вклад в науку 0.0000000000001 Познеров <br/> Но это только начало..." x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=sans_serif font_italic=no font_size=34 html=yes show_if=always text="Тренировка закончилась - нажмите любую кнопку" x=0 y=0 z_index=0

define sketchpad error
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="РАНО НАЧАЛИ САККАДУ, ПРОБА ИСПОРЧЕНА" x=0 y=0 z_index=0

define sketchpad error_1
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="РАНО НАЧАЛИ САККАДУ, ПРОБА ИСПОРЧЕНА" x=0 y=0 z_index=0

define sketchpad error_1_1
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="РАНО НАЧАЛИ САККАДУ, ПРОБА ИСПОРЧЕНА" x=0 y=0 z_index=0

define pygaze_log error_2
	set throttle 2
	set msg DORN_ERROR
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log error_2_1
	set throttle 2
	set msg DORN_ERROR
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run about_this_template always
	run pygaze_init always
	run instructions always
	run imprnt_instrct always
	run rest always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence_exp

define inline_script far
	set description "Executes Python code"
	___run__
	w = 960
	h = 540	
	rad = 63
	
	sound = exp.get("sound")
	src = pool[str(sound) + '.ogg']
	my_sampler = Sampler(src, volume=.5)
	my_sampler.play()
	var.var_check = 1
	
	while my_sampler.is_playing():
		x, y = eyetracker.sample()
		if (w-rad < x < w+rad) and (h-rad < y < h+rad):
			pass
		else:
			var.var_check = 0
			break
	__end__
	set _prepare ""

define pygaze_log fix1
	set throttle 2
	set msg DORN_fix1
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log fix2
	set throttle 2
	set msg DORN_s_end
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log fix2_1
	set throttle 2
	set msg DORN_s_end
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log fix3
	set throttle 2
	set msg DORN_fix3
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad fixation_dot_1
	set duration 305
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_1_1
	set duration 305
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_1_1_1
	set duration 305
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_dot_2
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-700 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0

define sketchpad fixation_dot_2_1_1
	# set duration 0
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0

define sketchpad fixation_dot_2_1_1_1
	# set duration 0
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="star.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0

define sketchpad fixation_dot_3_1
	# #
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-700 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0

define sketchpad fixation_dot_3_1_1
	# #
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if="[cond] ='onset'" x=0 y=0 z_index=0
	draw image center=1 file="swap.png" scale=1 show_if="[cond] ='swap'" x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-700 y=0 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='right_circle'  and [circle] = 'up'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='right_circle'  and [circle] = 'up'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='right_square'  and [circle] = 'up'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='right_square'  and [circle] = 'up'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='left_circle'  and [circle] = 'up'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='left_circle'  and [circle] = 'up'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='left_square'  and [circle] = 'up'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='left_square'  and [circle] = 'up'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='right_circle'  and [circle] = 'down'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='right_circle'  and [circle] = 'down'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='right_square'  and [circle] = 'down'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='right_square'  and [circle] = 'down'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='left_circle'  and [circle] = 'down'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='left_circle'  and [circle] = 'down'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[sound] ='left_square'  and [circle] = 'down'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[sound] ='left_square'  and [circle] = 'down'" x=-550 y=300 z_index=0

define sketchpad fixation_dot_3_1_1_1
	# #
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=-300 z_index=0

define sketchpad fixation_dot_3_1_1_1_1
	# #
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=-300 z_index=0

define sketchpad fixation_dot_4_1
	# #
	set duration 205
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-700 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-700 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'far'" x=550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' and [d] = 'near'" x=320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'far'" x=550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' and [d] = 'near'" x=320 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'far'" x=-550 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' and [d] = 'near'" x=-320 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'far'" x=-550 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' and [d] = 'near'" x=-320 y=300 z_index=0

define sketchpad fixation_dot_4_1_1
	# #
	set duration 205
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=-300 z_index=0

define sketchpad fixation_dot_4_1_1_1
	# #
	set duration 205
	set description "Displays stimuli"
	draw image center=1 file="onset.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_circle' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='right_square' " style=default x=627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_circle' " style=default x=-627 y=0 z_index=0
	draw fixdot color="#7ad108" show_if="[sound] ='left_square' " style=default x=-627 y=0 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_circle' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_circle' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'up'  " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='right_square' and [circle] = 'down'  " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'up'  " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='par' and [sound] ='left_square' and [circle] = 'down'  " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_circle.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_circle' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_circle' and [circle] = 'down' " x=-418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'up' " x=418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='right_square' and [circle] = 'down' " x=418 y=-300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'up' " x=-418 y=300 z_index=0
	draw image center=1 file="object_square.png" scale=0.3 show_if="[order] ='seq' and [sound] ='left_square' and [circle] = 'down' " x=-418 y=-300 z_index=0

define pygaze_log gaze_cont
	set throttle 2
	set msg DORN_gc
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define sketchpad imprnt_instrct
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="sans-serif" font_italic=no font_size=28 html=yes show_if=always text="Вы можете отдохнуть во время<br />эксперимента после каждой пробы:</b><br />поморгать или закрыть глаза. </b><br />Или вообще откинуться на стул, <br />но тогда, скорее всего, придется перекалиброваться" x=32 y=-32 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=2 color=white font_bold=no font_family="sans-serif" font_italic=no font_size=28 html=yes show_if=always text="1. Чтобы начать пробу посмотрите на белую точку в центре экрана <br /> и нажмите пробел<br /> 2. В центре экрана появится зеленая точка. Нужно смотреть на нее <br /> 3. Через три милисекунды вы услышите подсказку куда нужно направить взгляд<br /> 4. Вам нужно сделать две саккады (два скачка взглядом) <br /> Сначала посмотрите на точку слева или справа<br /> Затем посмотрите на фигуру (кружок или квадрат) <br /> 5. Удерживайте на фигуре взгляд пока она не исчезнет<br />6. Если заметите звездочки - не пугайтесь, все идет по плану :)" x=-512 y=-256 z_index=0
	draw image center=1 file="object_circle.png" scale=0.5 show_if=always x=-200 y=190 z_index=0
	draw image center=1 file="object_square.png" scale=0.5 show_if=always x=0 y=190 z_index=0
	draw image center=1 file="star.png" scale=0.5 show_if=always x=200 y=190 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Нажмите на любую кнопку" x=0 y=352 z_index=0
	draw fixdot color=white show_if=always style=default x=768 y=-256 z_index=0
	draw fixdot color="#7ad108" show_if=always style=default x=768 y=-160 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes
	log count_logger
	log order
	log sound
	log circle

define logger logger_1_1
	set description "Logs experimental data"
	set auto_log yes
	log count_logger
	log order
	log sound
	log circle

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text rrrrrrrrrrrrrrrrrrrrrr
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	
	import numpy as np
	w = self.get('width')
	e1 = w/3
	e2 = w-w/3
	
	preTex = np.zeros( [1,w] )
	preTex[0,:e1] = -1
	preTex[0,e1:e2] = np.linspace(-1,1,e2-e1)
	preTex[0,e2:] = 1
	
		
	postTex = np.zeros( [1,w] )
	postTex[0,:e1] = -1
	postTex[0,e1:e2] = np.linspace(-1,1,e2-e1)
	postTex[0,e2:] = 1
	__end__
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	w = 960
	h = 540	
	rad = 63
	
	sound = exp.get("sound")
	src = pool[str(sound) + '.ogg']
	my_sampler = Sampler(src, volume=.5)
	my_sampler.play()
	var.var_check = 1
	
	while my_sampler.is_playing():
		x, y = eyetracker.sample()
		if (w-rad < x < w+rad) and (h-rad < y < h+rad):
			pass
		else:
			var.var_check = 0
			break
	__end__
	set _prepare ""

define inline_script new_inline_script_1_1
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define pygaze_log new_pygaze_log_1
	set throttle 1
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_2
	set throttle 1
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_2_2
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script object_gc
	set description "Executes Python code"
	___run__
	# Loop ...
	while True:
	
		x,y = eyetracker.sample()
		if y < 270 or y > 780:
				break
	__end__
	set _prepare ""

define inline_script object_gc_1
	set description "Executes Python code"
	___run__
	# Loop ...
	while True:
	
		x, y = eyetracker.sample()
		if y < 270 or y > 780:
				break
	__end__
	set _prepare ""

define inline_script object_gc_1_1
	set description "Executes Python code"
	___run__
	# Loop ...
	while True:
	
		x, y = eyetracker.sample()
		if y < 270 or y > 780:
				break
	__end__
	set _prepare ""

define sketchpad pilot_trial
	set duration keypress
	set description "training start"
	draw textline center=2 color=white font_bold=no font_family=sans_serif font_italic=no font_size=34 html=yes show_if=always text="Для эксперимента важно, чтобы вы <br/>правильно управляли глазами<br />Поэтому сначала поупражняемся <br/> <br/>Во время тренировки вы можете задавать <br/>вопросы о том, как выполнять задание <br/> Во время эксперимента лучше этого не делать" x=-327 y=-138 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice ""
	run block_sequence

define pygaze_drift_correct pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style "small-cross"
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct pygaze_drift_correct_1
	set ypos 0
	set xpos 0
	set target_style "small-cross"
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct pygaze_drift_correct_1_1
	set ypos 0
	set xpos 0
	set target_style "small-cross"
	set target_color "[foreground]"
	set fixation_triggered no
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define pygaze_log pygaze_log
	set throttle 1
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording pygaze_start_recording_1
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording pygaze_start_recording_1_1
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording pygaze_stop_recording_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording pygaze_stop_recording_1_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_log recording
	set throttle 0
	set msg DORN_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log recording_1
	set throttle 0
	set msg DORN_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define sketchpad rest
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="sans-serif" font_italic=no font_size=28 html=yes show_if=always text="</b>Во время эксперимента МОЖНО ОТДЫХАТЬ,</b><br />между пробами:</b><br />поморгать или закрыть глаза<br />Правда это может привести к тому,</b><br />что нужно будет перекалиброваться " x=0 y=0 z_index=0

define sketchpad rest_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="sans-serif" font_italic=no font_size=28 html=yes show_if=always text="Вы прошли половину эксперимента<br />Можете чуток передохнуть: закрыть глаза, поморгать <br />Возможно нужна калибровка" x=32 y=-32 z_index=0

define sampler sampler
	set volume 1
	set stop_after 0
	set sample "[sound].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler sampler_1
	set volume 1
	set stop_after 0
	set sample "[sound].ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define pygaze_log sound_start
	set throttle 2
	set msg DORN_s_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log sound_start_1
	set throttle 2
	set msg DORN_s_start
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script star_gc
	set description "Executes Python code"
	___run__
	# Loop ...
	w = self.get('width')/2
	while True:
	
		x, y = eyetracker.sample()
		if x < (w - 292) or x > (w + 292):
				break
	__end__
	set _prepare ""

define inline_script star_gc_1
	set description "Executes Python code"
	___run__
	# Loop ...
	w = self.get('width')/2
	while True:
	
		x, y = eyetracker.sample()
		if x < (w - 292) or x > (w + 292):
				break
	__end__
	set _prepare ""

define inline_script star_gc_1_near
	set description "Executes Python code"
	___run__
	# Loop ...
	w, h = self.get('width'), self.get('height')
	while True:
	
		x, y = eyetracker.sample()
		if x < (w - 41) or x > (w + 41):
				break
	__end__
	set _prepare ""

define inline_script star_gc_far
	set description "Executes Python code"
	___run__
	# Loop ...
	w = self.get('width')/2
	while True:
	
		x, y = eyetracker.sample()
		if x < (w - 292) or x > (w + 292):
				break
	__end__
	set _prepare ""

define pygaze_log stop
	set throttle 2
	set msg DORN_stop
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run pygaze_drift_correct always
	run pygaze_start_recording always
	run fixation_dot_1 always
	run new_inline_script_2 always
	run fixation_dot_2 "[var_check] = 1"
	run star_gc_far "[var_check] = 1"
	run fixation_dot_3_1 "[var_check] = 1"
	run object_gc "[var_check] = 1"
	run fixation_dot_4_1 "[var_check] = 1"
	run error "[var_check] = 0"
	run pygaze_stop_recording always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run pygaze_drift_correct_1 always
	run pygaze_start_recording_1 always
	run recording always
	run fixation_dot_1_1 always
	run sound_start always
	run new_inline_script_1 always
	run fix2 "[var_check] = 1"
	run fixation_dot_2_1_1 "[var_check] = 1"
	run star_gc "[var_check] = 1"
	run fixation_dot_3_1_1_1 "[var_check] = 1"
	run object_gc_1 "[var_check] = 1"
	run fixation_dot_4_1_1 "[var_check] = 1"
	run error_1 "[var_check] = 0"
	run error_2 "[var_check] = 0"
	run logger_1 always
	run pygaze_stop_recording_1 always

define sequence trial_sequence_1_1
	set flush_keyboard yes
	set description "A single trial"
	run pygaze_drift_correct_1_1 always
	run pygaze_start_recording_1_1 always
	run recording_1 always
	run fixation_dot_1_1_1 always
	run sound_start_1 always
	run new_inline_script_1_1 always
	run fix2_1 "[var_check] = 1"
	run fixation_dot_2_1_1_1 "[var_check] = 1"
	run star_gc_1 "[var_check] = 1"
	run fixation_dot_3_1_1_1_1 "[var_check] = 1"
	run object_gc_1_1 "[var_check] = 1"
	run fixation_dot_4_1_1_1 "[var_check] = 1"
	run error_1_1 "[var_check] = 0"
	run error_2_1 "[var_check] = 0"
	run logger_1_1 always
	run pygaze_stop_recording_1_1 always

